PsychoPy2experiment version="2021.2.3"
Settings
  Data filename = u'../data/%s_%s_%s' % (expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '1000', 'session': '001', 'condition': "['01', '02', '03', '04', '05', '06', '07', '08', '09', '10', '11', '12', '13', '14', '15', '16']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = deg
  Window size (pixels) = [1920, 1080]
  color = black
  expName = task-switching-replication
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Routines
  Routine Initialize
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import itertools
        import sys
        import time

        # determine experiment settings from participant condition
        conditionStr = expInfo['condition']
        condition = int(conditionStr)
        numBlocks = 4
        numTrialsPerBlock = 48
        numTrialsUntimed = 12
        numTrialsTimed = 24

        # set up instrcution and experiment image stimuli based on condition
        untimedInstruction01   = 'instructions/cond-%02d-untimed-01.png' % (condition)
        untimedInstruction02   = 'instructions/cond-%02d-untimed-02.png' % (condition)
        untimedInstruction03   = 'instructions/cond-%02d-untimed-03.png' % (condition)
        untimedInstruction04   = 'instructions/cond-%02d-untimed-04.png' % (condition)
        untimedInstruction05   = 'instructions/cond-%02d-untimed-05.png' % (condition)
        untimedInstruction06   = 'instructions/cond-%02d-untimed-06.png' % (condition)
        untimedInstruction07   = 'instructions/cond-%02d-untimed-07.png' % (condition)
        untimedInstruction08   = 'instructions/cond-%02d-untimed-08.png' % (condition)
        timedInstruction01     = 'instructions/cond-%02d-timed-01.png' % (condition)
        timedInstruction02     = 'instructions/cond-%02d-timed-02.png' % (condition)
        expInstruction01       = 'instructions/cond-%02d-experiment-01.png' % (condition)
        errorInstructionDashed = 'instructions/cond-%02d-error-dashed.png' % (condition)
        errorInstructionSolid  = 'instructions/cond-%02d-error-solid.png' % (condition)

        # experiment trial variable enumerated types
        cue_types = ['dashed', 'solid']
        shape_types = ['square', 'triangle']
        shape_colors = ['blue', 'yellow']

        # mapping of subject condition number to counter balanced experiment settings for
        # cues and expected correct responses
        # NOTE: should we try and move these two tables/dicts into an external csv file and
        # load it instead of having it hardcoded in the psycopy code?
        counter_balancing = {
            #    posture     cueSolid cueDashed colorLeft colorRight shapeLeft  shapeRight
             1: ['standing', 'color', 'shape', 'blue',   'yellow', 'triangle', 'square'],
             2: ['standing', 'color', 'shape', 'blue',   'yellow', 'square',   'triangle'],
             3: ['standing', 'color', 'shape', 'yellow', 'blue',   'triangle', 'square'],
             4: ['standing', 'color', 'shape', 'yellow', 'blue',   'square',   'triangle'],

             5: ['standing', 'shape', 'color', 'blue',   'yellow', 'triangle', 'square'],
             6: ['standing', 'shape', 'color', 'blue',   'yellow', 'square',   'triangle'],
             7: ['standing', 'shape', 'color', 'yellow', 'blue',   'triangle', 'square'],
             8: ['standing', 'shape', 'color', 'yellow', 'blue',   'square',   'triangle'],

             9: ['sitting',  'color', 'shape', 'blue',   'yellow', 'triangle', 'square'],
            10: ['sitting',  'color', 'shape', 'blue',   'yellow', 'square',   'triangle'],
            11: ['sitting',  'color', 'shape', 'yellow', 'blue',   'triangle', 'square'],
            12: ['sitting',  'color', 'shape', 'yellow', 'blue',   'square',   'triangle'],

            13: ['sitting',  'shape', 'color', 'blue',   'yellow', 'triangle', 'square'],
            14: ['sitting',  'shape', 'color', 'blue',   'yellow', 'square',   'triangle'],
            15: ['sitting',  'shape', 'color', 'yellow', 'blue',   'triangle', 'square'],
            16: ['sitting',  'shape', 'color', 'yellow', 'blue',   'square',   'triangle'],
        }

        # given selected subject condition, determine experiment variables and settings being
        # used
        posture, cueSolid, cueDashed, colorLeft, colorRight, shapeLeft, shapeRight = counter_balancing[condition]

        # mapping of subject counter balanced conditions to expected correct button
        # press, 1 for left and 2 for right.  Used explicitly when creating randomized
        # trials to correctly set all trial variables for current subject condition
        subject_condition_responses = {
            # condition 1, dashed=shape, solid=color
            (1, 'dashed', 'yellow', 'triangle'): 1,
            (1, 'dashed', 'yellow', 'square'): 2,
            (1, 'dashed', 'blue',   'triangle'): 1,
            (1, 'dashed', 'blue',   'square'): 2,
            (1, 'solid',  'yellow', 'triangle'): 2,
            (1, 'solid',  'yellow', 'square'): 2,
            (1, 'solid',  'blue',   'triangle'): 1,
            (1, 'solid',  'blue',   'square'): 1,

            # condition 2, dashed=shape, solid=color
            (2, 'dashed', 'yellow', 'triangle'): 2,
            (2, 'dashed', 'yellow', 'square'): 1,
            (2, 'dashed', 'blue',   'triangle'): 2,
            (2, 'dashed', 'blue',   'square'): 1,
            (2, 'solid',  'yellow', 'triangle'): 2,
            (2, 'solid',  'yellow', 'square'): 2,
            (2, 'solid',  'blue',   'triangle'): 1,
            (2, 'solid',  'blue',   'square'): 1,

            # condition 3, dashed=shape, solid=color
            (3, 'dashed', 'yellow', 'triangle'): 1,
            (3, 'dashed', 'yellow', 'square'): 2,
            (3, 'dashed', 'blue',   'triangle'): 1,
            (3, 'dashed', 'blue',   'square'): 2,
            (3, 'solid',  'yellow', 'triangle'): 1,
            (3, 'solid',  'yellow', 'square'): 1,
            (3, 'solid',  'blue',   'triangle'): 2,
            (3, 'solid',  'blue',   'square'): 2,

            # condition 4, dashed=shape, solid=color
            (4, 'dashed', 'yellow', 'triangle'): 2,
            (4, 'dashed', 'yellow', 'square'): 1,
            (4, 'dashed', 'blue',   'triangle'): 2,
            (4, 'dashed', 'blue',   'square'): 1,
            (4, 'solid',  'yellow', 'triangle'): 1,
            (4, 'solid',  'yellow', 'square'): 1,
            (4, 'solid',  'blue',   'triangle'): 2,
            (4, 'solid',  'blue',   'square'): 2,

            # condition 5, dashed=color, solid=shape
            (5, 'dashed', 'yellow', 'triangle'): 2,
            (5, 'dashed', 'yellow', 'square'): 2,
            (5, 'dashed', 'blue',   'triangle'): 1,
            (5, 'dashed', 'blue',   'square'): 1,
            (5, 'solid',  'yellow', 'triangle'): 1,
            (5, 'solid',  'yellow', 'square'): 2,
            (5, 'solid',  'blue',   'triangle'): 1,
            (5, 'solid',  'blue',   'square'): 2,

            # condition 6, dashed=color, solid=shape
            (6, 'dashed', 'yellow', 'triangle'): 2,
            (6, 'dashed', 'yellow', 'square'): 2,
            (6, 'dashed', 'blue',   'triangle'): 1,
            (6, 'dashed', 'blue',   'square'): 1,
            (6, 'solid',  'yellow', 'triangle'): 2,
            (6, 'solid',  'yellow', 'square'): 1,
            (6, 'solid',  'blue',   'triangle'): 2,
            (6, 'solid',  'blue',   'square'): 1,

            # condition 7, dashed=color, solid=shape
            (7, 'dashed', 'yellow', 'triangle'): 1,
            (7, 'dashed', 'yellow', 'square'): 1,
            (7, 'dashed', 'blue',   'triangle'): 2,
            (7, 'dashed', 'blue',   'square'): 2,
            (7, 'solid',  'yellow', 'triangle'): 1,
            (7, 'solid',  'yellow', 'square'): 2,
            (7, 'solid',  'blue',   'triangle'): 1,
            (7, 'solid',  'blue',   'square'): 2,

            # condition 8, dashed=color, solid=shape
            (8, 'dashed', 'yellow', 'triangle'): 1,
            (8, 'dashed', 'yellow', 'square'): 1,
            (8, 'dashed', 'blue',   'triangle'): 2,
            (8, 'dashed', 'blue',   'square'): 2,
            (8, 'solid',  'yellow', 'triangle'): 2,
            (8, 'solid',  'yellow', 'square'): 1,
            (8, 'solid',  'blue',   'triangle'): 2,
            (8, 'solid',  'blue',   'square'): 1,

            # condition 9, dashed=shape, solid=color
            (9, 'dashed', 'yellow', 'triangle'): 1,
            (9, 'dashed', 'yellow', 'square'): 2,
            (9, 'dashed', 'blue',   'triangle'): 1,
            (9, 'dashed', 'blue',   'square'): 2,
            (9, 'solid',  'yellow', 'triangle'): 2,
            (9, 'solid',  'yellow', 'square'): 2,
            (9, 'solid',  'blue',   'triangle'): 1,
            (9, 'solid',  'blue',   'square'): 1,

            # condition 10, dashed=shape, solid=color
            (10, 'dashed', 'yellow', 'triangle'): 2,
            (10, 'dashed', 'yellow', 'square'): 1,
            (10, 'dashed', 'blue',   'triangle'): 2,
            (10, 'dashed', 'blue',   'square'): 1,
            (10, 'solid',  'yellow', 'triangle'): 2,
            (10, 'solid',  'yellow', 'square'): 2,
            (10, 'solid',  'blue',   'triangle'): 1,
            (10, 'solid',  'blue',   'square'): 1,

            # condition 11, dashed=shape, solid=color
            (11, 'dashed', 'yellow', 'triangle'): 1,
            (11, 'dashed', 'yellow', 'square'): 2,
            (11, 'dashed', 'blue',   'triangle'): 1,
            (11, 'dashed', 'blue',   'square'): 2,
            (11, 'solid',  'yellow', 'triangle'): 1,
            (11, 'solid',  'yellow', 'square'): 1,
            (11, 'solid',  'blue',   'triangle'): 2,
            (11, 'solid',  'blue',   'square'): 2,

            # condition 12, dashed=shape, solid=color
            (12, 'dashed', 'yellow', 'triangle'): 2,
            (12, 'dashed', 'yellow', 'square'): 1,
            (12, 'dashed', 'blue',   'triangle'): 2,
            (12, 'dashed', 'blue',   'square'): 1,
            (12, 'solid',  'yellow', 'triangle'): 1,
            (12, 'solid',  'yellow', 'square'): 1,
            (12, 'solid',  'blue',   'triangle'): 2,
            (12, 'solid',  'blue',   'square'): 2,

            # condition 13, dashed=color, solid=shape
            (13, 'dashed', 'yellow', 'triangle'): 2,
            (13, 'dashed', 'yellow', 'square'): 2,
            (13, 'dashed', 'blue',   'triangle'): 1,
            (13, 'dashed', 'blue',   'square'): 1,
            (13, 'solid',  'yellow', 'triangle'): 1,
            (13, 'solid',  'yellow', 'square'): 2,
            (13, 'solid',  'blue',   'triangle'): 1,
            (13, 'solid',  'blue',   'square'): 2,

            # condition 14, dashed=color, solid=shape
            (14, 'dashed', 'yellow', 'triangle'): 2,
            (14, 'dashed', 'yellow', 'square'): 2,
            (14, 'dashed', 'blue',   'triangle'): 1,
            (14, 'dashed', 'blue',   'square'): 1,
            (14, 'solid',  'yellow', 'triangle'): 2,
            (14, 'solid',  'yellow', 'square'): 1,
            (14, 'solid',  'blue',   'triangle'): 2,
            (14, 'solid',  'blue',   'square'): 1,

            # condition 15, dashed=color, solid=shape
            (15, 'dashed', 'yellow', 'triangle'): 1,
            (15, 'dashed', 'yellow', 'square'): 1,
            (15, 'dashed', 'blue',   'triangle'): 2,
            (15, 'dashed', 'blue',   'square'): 2,
            (15, 'solid',  'yellow', 'triangle'): 1,
            (15, 'solid',  'yellow', 'square'): 2,
            (15, 'solid',  'blue',   'triangle'): 1,
            (15, 'solid',  'blue',   'square'): 2,

            # condition 16, dashed=color, solid=shape
            (16, 'dashed', 'yellow', 'triangle'): 1,
            (16, 'dashed', 'yellow', 'square'): 1,
            (16, 'dashed', 'blue',   'triangle'): 2,
            (16, 'dashed', 'blue',   'square'): 2,
            (16, 'solid',  'yellow', 'triangle'): 2,
            (16, 'solid',  'yellow', 'square'): 1,
            (16, 'solid',  'blue',   'triangle'): 2,
            (16, 'solid',  'blue',   'square'): 1,
        }

        def determine_expected_response(condition, trial):
            """
            Given subject condition and the trial variables (cue, shape and color), determine
            correct response.  We basically use a lookup table / dictionary
            to map from these to expected correct response.  The lookup table could (should?)
            be moved to a file that is read in on experiment startup.
            """
            response = 0
            cue_type, shape_type, shape_color = trial
            response = subject_condition_responses[(condition, cue_type, shape_color, shape_type)]

            # it is an error if response is still 0, should probably
            # stop or throw an exception to be defensive
            return response


        def is_balanced(trials):
            """
            Return true if both switch/noswitch and congruant/incongruant
            are balanced, false otherwise.

            NOTE: this method always assumes there is a first buffer
            trial which is ignored when determining balance
            """
            return is_switch_balanced(trials) and is_congruant_balanced(trials)


        def is_switch_balanced(trials):
            """
            Return true if switch/noswitch are balanced, false if not.
            """
            switch_count = 0
            for _, _, _, _, _, switch_type, *_ in trials:
                if switch_type == 'switch':
                    switch_count += 1

            num_trials = len(trials) - 1
            half_trials = num_trials // 2

            #print('is_switch_balanced %d switched out of %d trials' % (switch_count, num_trials))
            return switch_count == half_trials


        def is_congruant_balanced(trials):
            """
            Return true if congruant/incongruant are balanced, false if not.
            """
            congruant_count = 0
            for _, _, _, _, _, _, congruant_type, *_ in trials:
                if congruant_type == 'congruant':
                    congruant_count += 1

            num_trials = len(trials) - 1
            half_trials = num_trials // 2

            #print('is_congruant_balanced %d congruant out of %d trials' % (congruant_count, num_trials))
            return congruant_count == half_trials


        def random_trials(block_num, trial_type, condition, posture, num_trials, add_buffer_trial=False):
            """
            Create the indicated number of trials and shuffle them
            randomly.  Return result as a list of the trial variables.

            The add_buffer_trial flag determines if a random initial trial is
            added to the beginning of the trial sequence.  Normally we systematically
            use the trial variable combinations, repeating all possible combinations
            as many times as needed.  But when we are explicitly enforcing that
            trial blocks have equal switch/noswitch and congruant/incongruant, we need
            an initial buffer trial where switch and congruant are NA, this is not
            defined except in relation to a previous trial, so the initial trial is always
            NA with respect to switch/noswitch and congruant/incongruant
            """

            # create list of 8 basic trial variable combinations
            vars = [cue_types, shape_types, shape_colors]
            base_trials = list(itertools.product(*vars))
            num_base_trials = len(base_trials)

            # Repeat basic trial combinations whole number of times
            # that we can, then select some more combinations at random
            # to get exactly the asked for num_trials
            num_base_repeats = num_trials // num_base_trials
            num_remaining = num_trials % num_base_trials
            trial_list = base_trials * num_base_repeats
            trial_list += random.sample(base_trials, num_remaining)

            # now shuffle the trial_list randomly
            random.shuffle(trial_list)

            # if we are to add a buffer trial, choose one at random and prepend
            # it to the trial list
            if add_buffer_trial:
                trial = random.choice(base_trials)
                trial_list = [trial] + trial_list
                num_trials += 1

            # collect trial variables as a list of trials to return
            trials = []

            # rest of trials, determine switch and congruant from previous
            for trial_num in range(0, num_trials):
                cue_type, shape_type, shape_color = trial_list[trial_num]
                current_response = determine_expected_response(condition, trial_list[trial_num])

                # first trial is a buffer
                # if no previous, then switch and congrunt are not applicable to this trial
                if trial_num == 0:
                    switch_type = 'buffer'
                    congruant_type = 'buffer'
                # otherwise determine switch and congruant for this trial based on previous trial
                else:
                    prev_cue_type, prev_shape_type, prev_shape_color = trial_list[trial_num - 1]

                    # determine if switch or noswitch
                    if cue_type == prev_cue_type:
                        switch_type = 'noswitch'
                    else:
                        switch_type = 'switch'

                    # determine if congruant or not congruant, this is more complicated, it depends
                    # on the expected response of previous trial and the response of current trial
                    if current_response == prev_response:
                        congruant_type = 'congruant'
                    else:
                        congruant_type = 'incongruant'

                # remember the previous response for next iteration to determine congruant / incongruant
                prev_response = current_response

                trials.append( (block_num, trial_num + 1, trial_type, condition, posture, switch_type, congruant_type, cue_type, shape_type, shape_color, current_response) )

            # return the resulting constructed and randomly shuffled list of trials
            return trials


        def counter_balanced_trials(block_num, trial_type, condition, posture, num_trials):
            """
            We brute force solution here.  Generate random trials
            with a buffer trial before the requested num_trials, then
            test to see if resulting random shuffle of trials is balanced
            or not.  Usually should take no more than 100 random generations
            to find a trial that is both balanced by switch/noswitch and
            congruant/incongruant
            """
            # get an initial set of random trials
            MAX_ATTEMPTS = 1000
            trials = random_trials(block_num, trial_type, condition, posture, num_trials, True)

            # keep generating random trials of the requested size until
            # we find a balanced one, or until we reach some maximum
            # attempts, in which case something may be wrong
            num_attempts = 1
            while not is_balanced(trials) and num_attempts <= MAX_ATTEMPTS:
                trials = random_trials(block_num, trial_type, condition, posture, num_trials, True)
                num_attempts += 1

            # sanity check, make sure we found a balanced trial
            if not is_balanced(trials):
                print("<counter_balanced_trials> Error: could not achieve block balance in %d attempts, aborting" % (MAX_ATTEMPTS))
                sys.exit(1)

            # at this point we should have found a balanced trial
            return trials


        def trials_to_csv(filename, trials):
            """
            Given a list of trials (which constitutes a single block of trials usually
            for the experiment), save the block trial list to a comma seperated values (csv)
            file.  This file can be loaded by Psychopy for an experiment block of trials.
            """
            f = open(filename, 'w')

            # file header
            f.write("blockNum,trialNum,trialType,condition,posture,switchTrialType,congruantTrialType,cueType,shapeType,shapeColor,cueFileName,stimuliFileName,correctAnswer\n")

            # loop to generate trial settings/variables
            for block_num, trial_num, trial_type, condition, posture, switch_type, congruant_type, cue_type, shape_type, shape_color, correct_response in trials:
                # file names for cue/stimuli to use for this trial
                cue_filename = 'stimuli/%s-rectangle.png' % (cue_type)
                stimuli_filename = 'stimuli/%s-%s.png' % (shape_color, shape_type)

                # output this trial
                f.write('%d,%d,%s,%s,%s,%s,%s,%s,%s,%s,%s,%s,%d\n' %
                      (block_num, trial_num, trial_type, condition, posture, switch_type, congruant_type, cue_type, shape_type, shape_color, cue_filename, stimuli_filename, correct_response))

            f.close()


        def trials_to_triallist(trials):
            """
            Return a list of dictionaries, where keys are the trial feature/variable names.  Can be used
            directly in Psychopy code instead of saving to a csv file then loading the file for a
            block of trials.
            """
            trial_list = []

            # loop to generate trial settings/variables
            for block_num, trial_num, trial_type, condition, posture, switch_type, congruant_type, cue_type, shape_type, shape_color, correct_response in trials:
                # file names for cue/stimuli to use for this trial
                cue_filename = 'stimuli/%s-rectangle.png' % (cue_type)
                stimuli_filename = 'stimuli/%s-%s.png' % (shape_color, shape_type)

                trial_dict = {
                    'blockNum': block_num,
                    'trialNum': trial_num,
                    'trialType': trial_type,
                    'condition': condition,
                    'posture': posture,
                    'switchTrialType': switch_type,
                    'congruantTrialType': congruant_type,
                    'cueType': cue_type,
                    'shapeType': shape_type,
                    'shapeColor': shape_color,
                    'cueFileName': cue_filename,
                    'stimuliFileName': stimuli_filename,
                    'correctAnswer': correct_response,
                }

                trial_list.append(trial_dict)

            return trial_list
  Routine ExpInstruction01
    ImageComponent image
      image = $expInstruction01
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_response
      allowedKeys [set every repeat] = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ExpInstructionBlock
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        blockNumber = 0
        blockText = ""
      Begin Routine:
        blockNumber += 1

        blockText = """
        Please check your posture and ensure you
        are still in the correct position.

        You should be in the '%s' posture for this
        block of the experiment.

        This is block %d of %d blocks



        Press any button to start the challenge""" % (posture, blockNumber, numBlocks)
    TextComponent text
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockText
      wrapWidth = 30
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ExpTrial
    ImageComponent cue_image
      image [set every repeat] = $cueFileName
      size = (25.0, 25.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = deg
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    ImageComponent stimuli_image
      image [set every repeat] = $stimuliFileName
      size = (12.0, 12.0)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = deg
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    KeyboardComponent exp_resp
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code_13
      Code Type = Auto->JS
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      Each Frame:
        if True:
            trials.addData("utcTime", time.time())
  Routine InitializeBlock
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        #blockNum = 1
        trialType = 'experiment'
        thisBlockTrials = counter_balanced_trials(blockNumber, trialType, condition, posture, numTrialsPerBlock)
        thisBlockFileName = '../data/%s_%s_%s-posture-%s-block-%02d-trials.csv' % (expInfo['participant'], expName, expInfo['date'], posture, blockNumber)
        trials_to_csv(thisBlockFileName, thisBlockTrials)
  Routine SolidFeedback
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_2
      image = $errorInstructionSolid
      size = (53, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine DashedFeedback
    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    ImageComponent image_3
      image = $errorInstructionDashed
      size = (53, 30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine DetermineExpFeedback
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        selectCorrect = 0
        selectIncorrectSolid = 0
        selectIncorrectDashed= 0
      Begin Routine:
        totalTrialsAttempted += 1

        if type(exp_resp.rt) == float:
            reactionTimeSum += exp_resp.rt
            totalTrialsReactedSuccessfully += 1
            #print('rt:  %f, sum: %f, totalTrials: %d' % (exp_resp.rt, reactionTimeSum, totalTrialsReactedSuccessfully))

        if exp_resp.corr == 1:
            selectCorrect = 1
            selectIncorrectSolid = 0
            selectIncorrectDashed = 0
            numCorrectTrials += 1
        else:
            selectCorrect = 0
            if cueType == 'solid':
                selectIncorrectSolid = 1
                selectIncorrectDashed = 0
            else:
                selectIncorrectSolid = 0
                selectIncorrectDashed = 1
  Routine Delay
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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  Routine PostureInstruction
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        postureTrial = 0

        numCorrectTrials = 0
        totalTrialsAttempted = 0
        reactionTimeSum = 0.0
        totalTrialsReactedSuccessfully = 0
      Begin Routine:
        # move to next posture if needed,
        # this will switch the posture after each
        # set of numBlocks is completed.
        if postureTrial >= 2:
            blockNumber = 0
            if posture == 'standing':
                posture = 'sitting'
            elif posture == 'sitting':
                posture = 'standing'

        # set up instructions for this posture
        postureInstructions = """
        You will be performing this experiment in
        two separate postures.

        At this time you should be in the
        `%s` posture

        Please have the experimenter help you
        get yourself into position for this
        portion of the experiment.

        Press any button when you are ready to continue.
        """ % (posture)

        # set up for next posture iteration
        postureTrial += 1
    TextComponent text_3
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      text [set every repeat] = $postureInstructions
      wrapWidth = 30
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Results
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        accuracy = float(numCorrectTrials) / float(totalTrialsAttempted)
        avgReactionTime = reactionTimeSum / float(totalTrialsReactedSuccessfully)

        experimentResultsText = """
        Thank you for participating in our experiment.
        Your participantion is greatly appreciated.

        You had an accuracy rate of

        %d / %d = %0.1f %% correct

        For comparison, in a previous study, participants
        achieved an accuracy of 92.5%%

        Your average reaction time on the trials
        that you responded in time was

        %0.4f sec

        For comparison, in a previous study, participants
        achieved an average reaction time of 0.5404 sec

        Press any key when you are ready to finish the experiment.
        """ % (numCorrectTrials, totalTrialsAttempted, accuracy * 100.0, avgReactionTime)
    TextComponent text_4
      letterHeight = 1.0
      startVal [time (s)] = 0.0
      text [set every repeat] = $experimentResultsText
      wrapWidth = 30
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    KeyboardComponent key_resp_3
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction01
    ImageComponent image_4
      image = $untimedInstruction01
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction02
    ImageComponent image_5
      image = $untimedInstruction02
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = '1',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction03
    ImageComponent image_6
      image = $untimedInstruction03
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction04
    ImageComponent image_7
      image = $untimedInstruction04
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction05
    ImageComponent image_8
      image = $untimedInstruction05
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction06
    ImageComponent image_9
      image = $untimedInstruction06
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = '2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction07
    ImageComponent image_10
      image = $untimedInstruction07
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine UntimedInstruction08
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  Routine InitializeUntimed
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        untimedNum = 1
        blockNum = 1
        trialType = 'untimed'
        thisUntimedTrials = random_trials(blockNum, trialType, condition, posture, numTrialsUntimed)
        thisUntimedFileName = '../data/%s_%s_%s-untimed-%02d-trials.csv' % (expInfo['participant'], expName, expInfo['date'], untimedNum)
        trials_to_csv(thisUntimedFileName, thisUntimedTrials)
  Routine UntimedTrial
    ImageComponent cue_untimed_image
      image [set every repeat] = $cueFileName
      size = (30.0, 30.0)
      startVal [time (s)] = 0.0
      units = cm
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    ImageComponent stimuli_untimed_image
      image [set every repeat] = $stimuliFileName
      size = (15.0, 15.0)
      startVal [time (s)] = 1.0
      units = cm
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    KeyboardComponent untimed_resp
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      storeCorrect = True
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    CodeComponent code_11
      Code Type = Auto->JS
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      Each Frame:
        if True:
            untimedTrials.addData("utcTime", time.time())
  Routine DetermineUntimedFeedback
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        selectCorrect = 0
        selectIncorrectSolid = 0
        selectIncorrectDashed= 0
      Begin Routine:
        if untimed_resp.corr == 1:
            selectCorrect = 1
            selectIncorrectSolid = 0
            selectIncorrectDashed = 0
        else:
            selectCorrect = 0
            if cueType == 'solid':
                selectIncorrectSolid = 1
                selectIncorrectDashed = 0
            else:
                selectIncorrectSolid = 0
                selectIncorrectDashed = 1
  Routine TimedInstruction01
    ImageComponent image_12
      image = $timedInstruction01
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine TimedInstruction02
    ImageComponent image_13
      image = $timedInstruction02
      size = (53.0, 30.0)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InitializeTimed
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        timedNum = 1
        blockNum = 1
        trialType = 'timed'
        thisTimedTrials = random_trials(blockNum, trialType, condition, posture, numTrialsTimed)
        thisTimedFileName = '../data/%s_%s_%s-timed-%02d-trials.csv' % (expInfo['participant'], expName, expInfo['date'], timedNum)
        trials_to_csv(thisTimedFileName, thisTimedTrials)
  Routine TimedTrial
    ImageComponent cue_timed_image
      image [set every repeat] = $cueFileName
      size = (25.0, 25.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      units = deg
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    ImageComponent stimuli_timed_image
      image [set every repeat] = $stimuliFileName
      size = (12.0, 12.0)
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      units = deg
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    KeyboardComponent timed_resp
      allowedKeys = '1','2'
      correctAns = $correctAnswer
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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    CodeComponent code_12
      Code Type = Auto->JS
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      Each Frame:
        if True:
            timedTrials.addData("utcTime", time.time())
  Routine DetermineTimedFeedback
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        selectCorrect = 0
        selectIncorrectSolid = 0
        selectIncorrectDashed= 0
      Begin Routine:
        if timed_resp.corr == 1:
            selectCorrect = 1
            selectIncorrectSolid = 0
            selectIncorrectDashed = 0
        else:
            selectCorrect = 0
            if cueType == 'solid':
                selectIncorrectSolid = 1
                selectIncorrectDashed = 0
            else:
                selectIncorrectSolid = 0
                selectIncorrectDashed = 1
Flow
  Routine Initialize
  Routine PostureInstruction
  Routine UntimedInstruction01
  Routine UntimedInstruction02
  Routine UntimedInstruction03
  Routine UntimedInstruction04
  Routine UntimedInstruction05
  Routine UntimedInstruction06
  Routine UntimedInstruction07
  Routine UntimedInstruction08
  Routine InitializeUntimed
  LoopInitiator untimedTrials loopType="TrialHandler"
    conditionsFile = $thisUntimedFileName
    loopType = sequential
    nReps = 1
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    Routine UntimedTrial
    Routine DetermineUntimedFeedback
    LoopInitiator selectSolid1 loopType="TrialHandler"
      loopType = sequential
      nReps = selectIncorrectSolid
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      Routine SolidFeedback
    LoopTerminator selectSolid1
    LoopInitiator selectDashed1 loopType="TrialHandler"
      loopType = sequential
      nReps = selectIncorrectDashed
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      Routine DashedFeedback
    LoopTerminator selectDashed1
    Routine Delay
  LoopTerminator untimedTrials
  Routine TimedInstruction01
  Routine TimedInstruction02
  Routine InitializeTimed
  LoopInitiator timedTrials loopType="TrialHandler"
    conditionsFile = $thisTimedFileName
    loopType = sequential
    nReps = 1
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    Routine TimedTrial
    Routine DetermineTimedFeedback
    LoopInitiator selectSolid2 loopType="TrialHandler"
      loopType = sequential
      nReps = selectIncorrectSolid
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      Routine SolidFeedback
    LoopTerminator selectSolid2
    LoopInitiator selectDashed2 loopType="TrialHandler"
      loopType = sequential
      nReps = selectIncorrectDashed
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      Routine DashedFeedback
    LoopTerminator selectDashed2
    Routine Delay
  LoopTerminator timedTrials
  LoopInitiator postures loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine PostureInstruction
    LoopInitiator blocks loopType="TrialHandler"
      loopType = sequential
      nReps = numBlocks
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      Routine ExpInstruction01
      Routine ExpInstructionBlock
      Routine InitializeBlock
      LoopInitiator trials loopType="TrialHandler"
        conditionsFile = $thisBlockFileName
        loopType = sequential
        nReps = 1
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        Routine ExpTrial
        Routine DetermineExpFeedback
        LoopInitiator selectSolid loopType="TrialHandler"
          loopType = sequential
          nReps = selectIncorrectSolid
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          Routine SolidFeedback
        LoopTerminator selectSolid
        LoopInitiator selectDashed loopType="TrialHandler"
          loopType = sequential
          nReps = selectIncorrectDashed
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          Routine DashedFeedback
        LoopTerminator selectDashed
        Routine Delay
      LoopTerminator trials
    LoopTerminator blocks
  LoopTerminator postures
  Routine Results
